PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test01
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    DotsComponent dots
      coherence = 0.9
      dir = 45
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 50
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
